WorkflowBuilder(Version=2.8.5)
BehaviorSubject<System.Boolean> LoomSequenceActive
BehaviorSubject<System.String> LoomStateLog
StringProperty

BehaviorSubject<Bonsai.Harp.HarpMessage> FastStepperCommands
-> Harp.FastStepper.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM8)
-> PublishSubject FastStepperEvents

SubscribeSubject FastStepperEvents
-> First
-> Delay(DueTime=PT0.1S)
-> SelectMany InitializeMovementSettings(Description=GroupName)
    WorkflowInput Source1
    -> Disable GroupWorkflow BrakeLock
        WorkflowInput Source1
        -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMotorBrakePayload(MotorBrake=BreakOn))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    -> GroupWorkflow DisableMotor
        WorkflowInput Source1
        -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=DisableMotor))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    -> GroupWorkflow DisableAnalog
        WorkflowInput Source1
        -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=DisableAnalogInput))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    -> GroupWorkflow EnableHoming => #4
        WorkflowInput Source1
        -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=EnableHoming))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    ExternalizedMapping(HomeVelocity) => #5
    #4, #5 -> GroupWorkflow SetHomingVelocity => #6
        WorkflowInput Source1 => #0
        ExternalizedMapping(HomeVelocity) => #1
        #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateHomeVelocityPayload(HomeVelocity=200))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    Disable ExternalizedMapping(MinVelocity) => #7
    #6, #7 -> Disable GroupWorkflow SetMinimumVelocity => #8
        WorkflowInput Source1 => #0
        ExternalizedMapping(MinVelocity) => #1
        #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMinVelocityPayload(MinVelocity=100))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    Disable ExternalizedMapping(MaxVelocity) => #9
    #8, #9 -> Disable GroupWorkflow SetMaximumVelocity => #10
        WorkflowInput Source1 => #0
        ExternalizedMapping(MaxVelocity) => #1
        #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMaxVelocityPayload(MaxVelocity=10000))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    Disable ExternalizedMapping(Acceleration(Category=AcceleratedMovement)) => #11
    #10, #11 -> Disable GroupWorkflow SetAcceleration => #12
        WorkflowInput Source1 => #0
        ExternalizedMapping(Acceleration) => #1
        #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateAccelerationPayload(Acceleration=10000))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    Disable ExternalizedMapping(Deceleration(Category=DeceleratedMovement)) => #13
    #12, #13 -> Disable GroupWorkflow SetDeceleration => #14
        WorkflowInput Source1 => #0
        ExternalizedMapping(Deceleration) => #1
        #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateDecelerationPayload(Deceleration=-20000))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    Disable ExternalizedMapping(AccelerationJerk(Category=AcceleratedMovement)) => #15
    #14, #15 -> Disable GroupWorkflow SetAccelerationJerk => #16
        WorkflowInput Source1 => #0
        ExternalizedMapping(AccelerationJerk) => #1
        #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateAccelerationJerkPayload(AccelerationJerk=-20000))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    Disable ExternalizedMapping(DecelerationJerk(Category=DeceleratedMovement)) => #17
    #16, #17 -> Disable GroupWorkflow SetDecelerationJerk
        WorkflowInput Source1 => #0
        ExternalizedMapping(DecelerationJerk) => #1
        #0, #1 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateDecelerationJerkPayload(DecelerationJerk=0))
        -> MulticastSubject FastStepperCommands
        -> WorkflowOutput
    -> WorkflowOutput

Bonsai.Windows.Input.KeyDown(Filter="MButton D Control", SuppressRepetitions=false)
-> SelectMany LoomDropSequenceLoop
    WorkflowInput Source1
    -> SelectMany LoomDropSequence
        WorkflowInput Source1
        -> BooleanProperty(Value=true)
        -> MulticastSubject LoomSequenceActive => #2
        ExternalizedMapping(MotorActivationTime) => #3
        #2, #3 -> GroupWorkflow EngagingMotor => #4
            WorkflowInput Source1 => #0
            ExternalizedMapping(MotorActivationTime(Category=Timings)) => #1
            #0, #1 -> SelectMany EnablingMotor => #2
                WorkflowInput Source1
                -> Sink LogStateMachine
                    WorkflowInput Source1
                    -> StringProperty(Value=EnablingMotor)
                    -> MulticastSubject LoomStateLog
                    -> WorkflowOutput
                -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=EnableMotor))
                -> MulticastSubject FastStepperCommands => #3
                ExternalizedMapping(DueTime(DisplayName=MotorActivationTime, Description="Time to wait after we enable the motor untill we can use it")) => #4
                #3, #4 -> Delay(DueTime=PT2S)
                -> Take(Count=1)
                -> WorkflowOutput
            Disable ExternalizedMapping(BrakeReleaseTime(Category=EngageMotorTimings)) => #3
            #2, #3 -> Disable SelectMany ReleasingBrake
                WorkflowInput Source1
                -> Sink LogStateMachine
                    WorkflowInput Source1
                    -> StringProperty(Value=ReleasingBrake)
                    -> MulticastSubject LoomStateLog
                    -> WorkflowOutput
                -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMotorBrakePayload(MotorBrake=BreakOff))
                -> MulticastSubject FastStepperCommands => #3
                ExternalizedMapping(DueTime(DisplayName=BrakeReleaseTime)) => #4
                #3, #4 -> Delay(DueTime=PT0S)
                -> Take(Count=1)
                -> WorkflowOutput
            -> WorkflowOutput
        ExternalizedMapping(BottomPosition) => #5
        #4, #5 -> SelectMany Dropping => #6
            SubscribeSubject FastStepperEvents
            -> Harp.FastStepper.Parse(Register=Harp.FastStepper.MoveToEvents) => #1
            -> Condition MoveSuccessful
                WorkflowInput Source1
                -> Equal(Operand=WorkflowProperty<Harp.FastStepper.MoveToEventsFlags>(Value=MoveSuccessful))
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
            #1 -> Condition MoveNotSuccessful
                WorkflowInput Source1
                -> NotEqual(Operand=WorkflowProperty<Harp.FastStepper.MoveToEventsFlags>(Value=MoveSuccessful))
                -> WorkflowOutput
            -> Sink LogStateMachine
                WorkflowInput Source1
                -> StringProperty(Value=DroppingMoveNotSuccessful)
                -> MulticastSubject LoomStateLog
                -> WorkflowOutput
            -> Aeon.Acquisition.ThrowException(Message=MoveNotSuccessful)

            WorkflowInput Source1
            -> Sink LogStateMachine => #9
                WorkflowInput Source1
                -> StringProperty(Value=Dropping)
                -> MulticastSubject LoomStateLog
                -> WorkflowOutput
            ExternalizedMapping(MoveTo(DisplayName=BottomPosition, Category=Distances)) => #10
            #9, #10 -> IncludeWorkflow
              Path=Extensions\MoveToParametric.bonsai
              MoveTo=3000
              MinVelocity=400
              MaxVelocity=10000
              Acceleration=10000
              Deceleration=-20000
              AccelerationJerk=-8000
              DecelerationJerk=4000
        ExternalizedMapping(BottomPauseTime(Category=Timings)) => #7
        #6, #7 -> SelectMany Bottom => #8
            WorkflowInput Source1
            -> Sink LogStateMachine => #1
                WorkflowInput Source1
                -> StringProperty(Value=Bottom)
                -> MulticastSubject LoomStateLog
                -> WorkflowOutput
            ExternalizedMapping(DueTime(DisplayName=BottomPauseTime)) => #2
            #1, #2 -> Delay(DueTime=PT1S)
            -> Take(Count=1)
            -> WorkflowOutput
        ExternalizedMapping => #9
          HomeDistance(Category=Distances)
          HomeOffsetPauseTime(Description="Time to wait after the homing completes untill it moves slightly down")
          HomeDistanceOffset(Category=Distances)
          LiftToPosition(Category=Distances)
        #8, #9 -> GroupWorkflow Homing => #10
            WorkflowInput Source1 => #0
            ExternalizedMapping(LiftToPosition) => #1
            #0, #1 -> SelectMany Lifting => #2
                SubscribeSubject FastStepperEvents
                -> Harp.FastStepper.Parse(Register=Harp.FastStepper.MoveToEvents) => #1
                -> Condition MoveSuccessful
                    WorkflowInput Source1
                    -> Equal(Operand=WorkflowProperty<Harp.FastStepper.MoveToEventsFlags>(Value=MoveSuccessful))
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput
                #1 -> Condition MoveNotSuccessful
                    WorkflowInput Source1
                    -> NotEqual(Operand=WorkflowProperty<Harp.FastStepper.MoveToEventsFlags>(Value=MoveSuccessful))
                    -> WorkflowOutput
                -> Sink LogStateMachine
                    WorkflowInput Source1
                    -> StringProperty(Value=LiftingMoveNotSuccessful)
                    -> MulticastSubject LoomStateLog
                    -> WorkflowOutput
                -> Aeon.Acquisition.ThrowException(Message=MoveNotSuccessful)

                WorkflowInput Source1
                -> Sink LogStateMachine => #9
                    WorkflowInput Source1
                    -> StringProperty(Value=Lifting)
                    -> MulticastSubject LoomStateLog
                    -> WorkflowOutput
                ExternalizedMapping(MoveTo(DisplayName=LiftToPosition)) => #10
                #9, #10 -> IncludeWorkflow
                  Path=Extensions\MoveToParametric.bonsai
                  MoveTo=200
                  MinVelocity=200
                  MaxVelocity=800
                  Acceleration=1000
                  Deceleration=-1000
                  AccelerationJerk=0
                  DecelerationJerk=0
            ExternalizedMapping(HomeDistance(Category=Distances)) => #3
            #2, #3 -> SelectMany Homing => #4
                SubscribeSubject FastStepperEvents
                -> Harp.FastStepper.Parse(Register=Harp.FastStepper.HomeStepsEvents) => #1
                -> Condition HomingSuccessful
                    WorkflowInput Source1
                    -> Equal(Operand=WorkflowProperty<Harp.FastStepper.HomeStepsEventsFlags>(Value=HomingSuccessful))
                    -> WorkflowOutput
                -> StringProperty(Value=HomingComplete)
                -> MulticastSubject LoomStateLog
                -> Take(Count=1)
                -> WorkflowOutput
                #1 -> Condition HomingNotSuccessful
                    WorkflowInput Source1
                    -> NotEqual(Operand=WorkflowProperty<Harp.FastStepper.HomeStepsEventsFlags>(Value=HomingSuccessful))
                    -> WorkflowOutput
                -> Sink LogStateMachine
                    WorkflowInput Source1
                    -> StringProperty(Value=HomingNotSuccessful)
                    -> MulticastSubject LoomStateLog
                    -> WorkflowOutput
                -> Aeon.Acquisition.ThrowException(Message=HomingNotSuccessful)

                WorkflowInput Source1
                -> Sink LogStateMachine => #11
                    WorkflowInput Source1
                    -> StringProperty(Value=Homing)
                    -> MulticastSubject LoomStateLog
                    -> WorkflowOutput
                ExternalizedMapping(HomeSteps(DisplayName=HomeDistance)) => #12
                #11, #12 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateHomeStepsPayload(HomeSteps=-1000))
                -> MulticastSubject FastStepperCommands
            ExternalizedMapping(HomeOffsetPauseTime(Category=Timings)) => #5
            #4, #5 -> SelectMany Home => #6
                WorkflowInput Source1
                -> Sink LogStateMachine => #1
                    WorkflowInput Source1
                    -> StringProperty(Value=Home)
                    -> MulticastSubject LoomStateLog
                    -> WorkflowOutput
                ExternalizedMapping(DueTime(DisplayName=HomeOffsetPauseTime)) => #2
                #1, #2 -> Delay(DueTime=PT0.2S)
                -> Take(Count=1)
                -> WorkflowOutput
            ExternalizedMapping(HomeDistanceOffset) => #7
            #6, #7 -> SelectMany "Home Offset"
                SubscribeSubject FastStepperEvents
                -> Harp.FastStepper.Parse(Register=Harp.FastStepper.MoveToEvents) => #1
                -> Condition MoveSuccessful
                    WorkflowInput Source1
                    -> Equal(Operand=WorkflowProperty<Harp.FastStepper.MoveToEventsFlags>(Value=MoveSuccessful))
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput
                #1 -> Condition MoveNotSuccessful
                    WorkflowInput Source1
                    -> NotEqual(Operand=WorkflowProperty<Harp.FastStepper.MoveToEventsFlags>(Value=MoveSuccessful))
                    -> WorkflowOutput
                -> Sink LogStateMachine
                    WorkflowInput Source1
                    -> StringProperty(Value=HomeOffsetMoveNotSuccessful)
                    -> MulticastSubject LoomStateLog
                    -> WorkflowOutput
                -> Aeon.Acquisition.ThrowException(Message=MoveNotSuccessful)

                WorkflowInput Source1
                -> Sink LogStateMachine => #9
                    WorkflowInput Source1
                    -> StringProperty(Value=HomeOffset)
                    -> MulticastSubject LoomStateLog
                    -> WorkflowOutput
                ExternalizedMapping(MoveTo(DisplayName=HomeDistanceOffset)) => #10
                #9, #10 -> IncludeWorkflow
                  Path=Extensions\MoveToParametric.bonsai
                  MoveTo=42
                  MinVelocity=200
                  MaxVelocity=400
                  Acceleration=500
                  Deceleration=-500
                  AccelerationJerk=0
                  DecelerationJerk=0
            -> WorkflowOutput
        ExternalizedMapping(MotorDeactivationTime) => #11
        #10, #11 -> GroupWorkflow DisengagingMotor
            WorkflowInput Source1 => #0
            Disable ExternalizedMapping(BrakeLockTime(Category=DisengageMotorTimings)) => #1
            #0, #1 -> Disable SelectMany LockingBrake => #2
                WorkflowInput Source1
                -> Sink LogStateMachine
                    WorkflowInput Source1
                    -> StringProperty(Value=LockingBrake)
                    -> MulticastSubject LoomStateLog
                    -> WorkflowOutput
                -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMotorBrakePayload(MotorBrake=BreakOn))
                -> MulticastSubject FastStepperCommands => #3
                ExternalizedMapping(DueTime(DisplayName=BrakeLockTime)) => #4
                #3, #4 -> Delay(DueTime=PT1S)
                -> Take(Count=1)
                -> WorkflowOutput
            ExternalizedMapping(MotorDeactivationTime(Category=Timings)) => #3
            #2, #3 -> SelectMany DisablingMotor
                WorkflowInput Source1
                -> Sink
                    WorkflowInput Source1
                    -> StringProperty(Value=DisablingMotor)
                    -> MulticastSubject LoomStateLog
                    -> WorkflowOutput
                -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=DisableMotor))
                -> MulticastSubject FastStepperCommands => #3
                ExternalizedMapping(DueTime(DisplayName=MotorDeactivationTime)) => #4
                #3, #4 -> Delay(DueTime=PT0.2S)
                -> Take(Count=1)
                -> WorkflowOutput
            -> WorkflowOutput
        -> BooleanProperty(Value=false)
        -> MulticastSubject LoomSequenceActive
        -> WorkflowOutput
    -> Delay(DueTime=PT1S)
    -> Take(Count=1)
    -> Disable Repeat
    -> Disable Retry
    -> Materialize
    -> WorkflowOutput

SubscribeSubject FastStepperEvents
-> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write)
-> Harp.FastStepper.Parse(Register=Harp.FastStepper.MoveToParametric)
-> Bonsai.Design.Visualizers.RollingGraphBuilder(SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)

Bonsai.Windows.Input.KeyDown(Filter="MButton ShiftKey Capital CapsLock D P T Control", SuppressRepetitions=false)
-> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=41, PayloadType=S32, Value=12345))
-> MulticastSubject FastStepperCommands

SubscribeSubject FastStepperEvents => #19
-> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(Address=44, PayloadType=S32, IsArray=false)) => #20
#19 -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(Address=45, PayloadType=S32, IsArray=false)) => #21
#20, #21 -> Zip
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new (
      it.Item1 as StepsToBrake,
      it.Item2 as StepsToTarget
    )
-> Bonsai.Gui.ZedGraph.RollingGraphBuilder(IndexSelector="", ValueSelector="StepsToBrake,StepsToTarget", SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, Min=nil, Max=nil)
-> Disable Bonsai.IO.CsvWriter(FileName=debug.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
#19 -> Harp.FastStepper.Parse(Register=Harp.FastStepper.MoveToEvents)
#19 -> Harp.FastStepper.Parse(Register=Harp.FastStepper.HomeStepsEvents)
#19 -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(Address=32, PayloadType=U16, IsArray=false))
#19 -> Harp.FastStepper.Parse(Register=Harp.FastStepper.Control)

Bonsai.Windows.Input.KeyDown(Filter=D1, SuppressRepetitions=false) => #30
ExternalizedMapping(MotorActivationTime(Category=EngageMotorTimings)) => #31
#30, #31 -> SelectMany EnablingMotor => #32
    WorkflowInput Source1
    -> Sink LogStateMachine
        WorkflowInput Source1
        -> StringProperty(Value=EnablingMotor)
        -> MulticastSubject LoomStateLog
        -> WorkflowOutput
    -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=EnableMotor))
    -> MulticastSubject FastStepperCommands => #3
    ExternalizedMapping(DueTime(DisplayName=MotorActivationTime, Description="Time to wait after we enable the motor untill we can use it")) => #4
    #3, #4 -> Delay(DueTime=PT2S)
    -> Take(Count=1)
    -> WorkflowOutput
ExternalizedMapping(BrakeReleaseTime(Category=EngageMotorTimings)) => #33
#32, #33 -> SelectMany ReleasingBrake
    WorkflowInput Source1
    -> Sink LogStateMachine
        WorkflowInput Source1
        -> StringProperty(Value=ReleasingBrake)
        -> MulticastSubject LoomStateLog
        -> WorkflowOutput
    -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMotorBrakePayload(MotorBrake=BreakOff))
    -> MulticastSubject FastStepperCommands => #3
    ExternalizedMapping(DueTime(DisplayName=BrakeReleaseTime)) => #4
    #3, #4 -> Delay(DueTime=PT1S)
    -> Take(Count=1)
    -> WorkflowOutput

Bonsai.Windows.Input.KeyDown(Filter=D2, SuppressRepetitions=false)
-> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMoveToPayload(MoveTo=3060))
-> MulticastSubject FastStepperCommands

Bonsai.Windows.Input.KeyDown(Filter=D3, SuppressRepetitions=false)
-> GroupWorkflow InitialHoming
    WorkflowInput Source1 => #0
    ExternalizedMapping(HomeDistance(Category=Distances)) => #1
    #0, #1 -> SelectMany Homing => #2
        SubscribeSubject FastStepperEvents
        -> Harp.FastStepper.Parse(Register=Harp.FastStepper.HomeStepsEvents) => #1
        -> Condition HomingSuccessful
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<Harp.FastStepper.HomeStepsEventsFlags>(Value=HomingSuccessful))
            -> WorkflowOutput
        -> StringProperty(Value=HomingComplete)
        -> MulticastSubject LoomStateLog
        -> Take(Count=1)
        -> WorkflowOutput
        #1 -> Condition HomingNotSuccessful
            WorkflowInput Source1
            -> NotEqual(Operand=WorkflowProperty<Harp.FastStepper.HomeStepsEventsFlags>(Value=HomingSuccessful))
            -> WorkflowOutput
        -> Sink LogStateMachine
            WorkflowInput Source1
            -> StringProperty(Value=HomingNotComplete)
            -> MulticastSubject LoomStateLog
            -> WorkflowOutput
        -> Aeon.Acquisition.ThrowException(Message=HomingNotSuccessful)

        WorkflowInput Source1
        -> Sink LogStateMachine => #11
            WorkflowInput Source1
            -> StringProperty(Value=Homing)
            -> MulticastSubject LoomStateLog
            -> WorkflowOutput
        ExternalizedMapping(HomeSteps(DisplayName=HomeDistance)) => #12
        #11, #12 -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateHomeStepsPayload(HomeSteps=-3500))
        -> MulticastSubject FastStepperCommands
    ExternalizedMapping(HomeOffsetPauseTime(Category=Timings)) => #3
    #2, #3 -> SelectMany Home => #4
        WorkflowInput Source1
        -> Sink => #1
            WorkflowInput Source1
            -> StringProperty(Value=Home)
            -> MulticastSubject LoomStateLog
            -> WorkflowOutput
        ExternalizedMapping(DueTime(DisplayName=HomeOffsetPauseTime)) => #2
        #1, #2 -> Delay(DueTime=PT0.2S)
        -> Take(Count=1)
        -> WorkflowOutput
    ExternalizedMapping(HomeDistanceOffset) => #5
    #4, #5 -> SelectMany "Home Offset"
        SubscribeSubject FastStepperEvents
        -> Harp.FastStepper.Parse(Register=Harp.FastStepper.MoveToEvents) => #1
        -> Condition MoveSuccessful
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<Harp.FastStepper.MoveToEventsFlags>(Value=MoveSuccessful))
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
        #1 -> Condition MoveNotSuccessful
            WorkflowInput Source1
            -> NotEqual(Operand=WorkflowProperty<Harp.FastStepper.MoveToEventsFlags>(Value=MoveSuccessful))
            -> WorkflowOutput
        -> Sink LogStateMachine
            WorkflowInput Source1
            -> StringProperty(Value=MoveNotSuccessful)
            -> MulticastSubject LoomStateLog
            -> WorkflowOutput
        -> Aeon.Acquisition.ThrowException(Message=MoveNotSuccessful)

        WorkflowInput Source1
        -> Sink LogStateMachine => #9
            WorkflowInput Source1
            -> StringProperty(Value=HomeOffset)
            -> MulticastSubject LoomStateLog
            -> WorkflowOutput
        ExternalizedMapping(MoveTo(DisplayName=HomeDistanceOffset)) => #10
        #9, #10 -> IncludeWorkflow
          Path=Extensions\MoveToParametric.bonsai
          MoveTo=42
          MinVelocity=200
          MaxVelocity=400
          Acceleration=500
          Deceleration=-500
          AccelerationJerk=0
          DecelerationJerk=0
    -> WorkflowOutput
-> Repeat
-> Retry
-> Materialize

Bonsai.Windows.Input.KeyDown(Filter=D4, SuppressRepetitions=false) => #43
ExternalizedMapping(BrakeLockTime(Category=DisengageMotorTimings)) => #44
#43, #44 -> SelectMany LockingBrake => #45
    WorkflowInput Source1
    -> Sink LoomStateLog
        WorkflowInput Source1
        -> StringProperty(Value=LockingBrake)
        -> MulticastSubject LoomStateLog
        -> WorkflowOutput
    -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateMotorBrakePayload(MotorBrake=BreakOn))
    -> MulticastSubject FastStepperCommands => #3
    ExternalizedMapping(DueTime(DisplayName=BrakeLockTime)) => #4
    #3, #4 -> Delay(DueTime=PT1S)
    -> Take(Count=1)
    -> WorkflowOutput
ExternalizedMapping(MotorDeactivationTime(Category=DisengageMotorTimings)) => #46
#45, #46 -> SelectMany DisablingMotor
    WorkflowInput Source1
    -> Sink
        WorkflowInput Source1
        -> StringProperty(Value=DisablingMotor)
        -> MulticastSubject LoomStateLog
        -> WorkflowOutput
    -> Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateControlPayload(Control=DisableMotor))
    -> MulticastSubject FastStepperCommands => #3
    ExternalizedMapping(DueTime(DisplayName=MotorDeactivationTime)) => #4
    #3, #4 -> Delay(DueTime=PT1S)
    -> Take(Count=1)
    -> WorkflowOutput

Harp.FastStepper.CreateMessage(MessageType=Write, Payload=Harp.FastStepper.CreateDecelerationPayload(Deceleration=-2147483648))
